PsychoPy2experiment version="2020.2.10"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['имя фамилия'], expName, expInfo['date'])
  Experiment info = {'имя фамилия': '', 'возраст': '', 'пол': "['Ж', 'М']"}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = Sound anagrams
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Routines
  Routine main_task
    KeyboardComponent user_input_resp
      allowedKeys = 'q', 'w', 'e', 'r', 't', 'y', 'u', 'i', 'o', 'p', 'a', 's', 'd', 'f', 'g', 'h', 'j', 'k', 'l', 'z', 'x', 'c', 'v', 'b', 'n', 'm', 'bracketleft', 'bracketright', 'semicolon', 'apostrophe', 'comma', 'period', 'х', 'ъ', 'ж', 'э', 'б', 'ю', 'space', 'backspace', 'return'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent translate_eng_to_rus
      Code Type = Auto->JS
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      Begin Experiment:
        # обозначение клавиш, которые можно использовать для написания слов
        ALLOWED_ALPHABET_KEYS = tuple(u"qwertyuiopasdfghjklzxcvbnm")
        SPECIAL_CYRILIC_BUTTONS = (u'bracketleft', u'bracketright',
                                   u'semicolon', u'apostrophe',
                                   u'comma', u'period',
                                   u'\u0445', u'\u044a', u'\u0436',
                                   u'\u044d', u'\u0431', u'\u044e')
        ALLOWED_ALPHABET_KEYS += SPECIAL_CYRILIC_BUTTONS

        RUS_ALPHABET_KEYS = u"йцукенгшщзфывапролдячсмитьхъжэбюхъжэбю"

        # так как PsychoPy использует английскую расскладку надо заменить
        # латиницу на кириллицу
        RUSSIAN_MAPPER = {}
        for idx in range(len(ALLOWED_ALPHABET_KEYS)):
            eng_key = ALLOWED_ALPHABET_KEYS[idx]
            rus_key = RUS_ALPHABET_KEYS[idx]
            RUSSIAN_MAPPER[eng_key] = rus_key



        # функция для определения того, что испытуемый не использовал больше
        # букв чем в анаграмме
        def words_lengths_comparison(user_word, right_answer):
            return len(user_word) < len(right_answer)


        ALLOWED_KEYS = ALLOWED_ALPHABET_KEYS + ("space", "backspace", "return")
    CodeComponent anagram_input_code
      Code Type = Auto->JS
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      Before Experiment:
        time_to_solve = 40
      Begin Experiment:
        main_input_processor = InputProcessor()
      Begin Routine:
        theseKeys = []
        attempts = 0
        success = u'No'

        main_input_processor.get_answer(answer)

        is_there_input = False
      Each Frame:
        user_input_text = main_input_processor.get_input()

        if t >= time_to_solve:
            is_there_input = visual_field.opacity == 1
            if not is_there_input:
                continueRoutine = False


        if theseKeys:
            button = theseKeys[0].name
            button_time = theseKeys[0].rt
            is_there_input = visual_field.opacity == 1
            if button == u'space':
                if not is_there_input:
                    attempt_time = format_time(button_time)
                    thisExp.addData(u'Attempt time', attempt_time)
                    attempts += 1
                    visual_field.opacity = 1
                    is_there_input = True
            elif button == u'return':
                if is_there_input:
                    if answer.lower() == user_input_text:
                        success = u'Yes'
                        successful_attempt_time = format_time(button_time)
                        continueRoutine = False
                    else:
                        unsuccessful_attempt_time = format_time(button_time)
                        thisExp.addData(u'Unsuccessful attempt time', unsuccessful_attempt_time)
                        thisExp.nextEntry()
                        visual_field.opacity = 0
                        main_input_processor.clear_input()
                        is_there_input = False
            elif is_there_input:
                main_input_processor.process_input(key=button)
      End Routine:
        main_input_processor.end_trial()
    CodeComponent hint_code
      Code Type = Auto->JS
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      Before Experiment:
        HINT_START = 240 # 600
        HINT_DURATION = 5
        MASK_DURATION = 2

        HINT_FINISH = HINT_START + HINT_DURATION + MASK_DURATION
      Begin Experiment:
        hint_text=visual.TextBox(window=win,
                                 text=u'0',
                                 font_size=60,
                                 font_color=[1,1,1],
                                 # size=(1.9,.3), - как было
                                 textgrid_shape=[10,1], # одиннаковый размер
                                 pos=(0.0, 0.0),
                                 grid_horz_justification='center',
                                 units='norm',
                                 )

        HINT_MASK_CONSONANTS = (u'й',u'ц',u'к',u'н',u'г',u'ш',u'щ',u'з',u'х',
        u'ъ',u'ф',u'в',u'п',u'р',u'л',u'д',u'ж',u'ч',u'с',u'м',u'т',u'ь',u'б')
      Begin Routine:
        hint_showed = u'no'
        frames_hint_showed = 0
        showing_hint = next(show_hint)


        mask = u''.join(np.random.choice(HINT_MASK_CONSONANTS,
                                 size=len(answer), replace=False))
      Each Frame:
        if HINT_START <= frameN < HINT_FINISH and not is_there_input:
            if showing_hint:
                if frames_hint_showed < HINT_DURATION:
                    hint_text.setText(answer)
                else:
                    hint_text.setText(mask)
                hint_showed = u'yes'
            else:
                hint_text.setText(mask)
                hint_showed = u'no'
            hint_text.draw()
            frames_hint_showed += 1
    CodeComponent anagram_textbox
      Code Type = Auto->JS
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      Begin Experiment:
        anagram_text=visual.TextBox(window=win,
                                 text=u'0',
                                 font_size=60,
                                 font_color=[1,1,1],
                                 textgrid_shape=[10,1],
                                 pos=(0.0, 0.0),
                                 grid_horz_justification='center',
                                 units='norm',
                                 )
      Begin Routine:
        anagram_text.setText(anagram)
      Each Frame:
        if not (HINT_START <= frameN < HINT_FINISH) or is_there_input:
            anagram_text.draw()
    PolygonComponent visual_field
      fillColor = $[0.506,0.506,0.506]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 5
      opacity [set every repeat] = 0
      pos = (0, -0.5)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent user_input_feedback
      color = black
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $user_input_text
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    CodeComponent sound_code
      Code Type = Py
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      Before Experiment:
        # данный класс расчитан ТОЛЬКО на 88 анаграмм, которые разделены на 4 группы
        # чтобы это подчеркнуть - скрипт будет с ошибкой завершаться, если это не так
        class SoundTimeChooser:
            def __init__(self, sounds):
                if len(sounds) != 88:
                    raise ValueError("Звуков должно быть 88, а было", len(sounds))

                self._sound_groups = (u'cry', u'laugh', u'neutral')

                self._check_sound_quantity(sounds)

                sound_types = (u'none', u'negative', u'positive', u'neutral')
                sound_times = [50] * 11 + [0] * 11
                self._times_for_sound_types = {}
                for sound_type in sound_types:
                    shuffle(sound_times)
                    self._times_for_sound_types[sound_type] = sound_times.copy()

            def _get_sound_group(self, sound):
                if sound is None:
                    return u'none'

                for group in self._sound_groups:
                    if group in sound:
                        return group

                raise ValueError("Звук", sound, "не является None или не относиncz к одной из групп из", self._sound_groups)

            def _check_sound_quantity(self, sounds):
                counter = {}
                for sound in sounds:
                    group = self._get_sound_group(sound)

                    if group in counter:
                        counter[group] += 1
                    else:
                        counter[group] = 1

                for sound_type in counter:
                    if counter[sound_type] != 22:
                        raise ValueError("Звуков типа", sound_type, "не 22")

            def next_time(self, sound_type):
                if sound_type == u'none':
                    return 0

                return self._times_for_sound_types[sound_type].pop()
      Begin Experiment:
        sound_time_chooser = SoundTimeChooser(sounds_path)
      Begin Routine:
        thisSound = sounds_path.pop()

        # sound_player.setSound(thisSound)

        sound_played = False

        if thisSound is None:
            sound_type = u'none'
            sound_played = True
        elif u'cry' in thisSound:
            sound_type = u'negative'
        elif u'laugh' in thisSound:
            sound_type = u'positive'
        else:
            sound_type = u'neutral'


        sound_before_hint = sound_time_chooser.next_time(sound_type)
        sound_start = HINT_START - sound_before_hint
      Each Frame:
        if thisSound is not None and not sound_played:
            sound_played = True
            # sound_player.play()
    CodeComponent data_saving
      Code Type = Auto->JS
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      Before Experiment:
        def format_time(time):
            str_time = str(float(time))
            idx = str_time.index(".")
            return str(time)[:idx + 3]
      End Routine:
        # сохранение информации о решении

        all_anagrams.addData(u'Success', success)

        if success == u'Yes':
            solution_time = successful_attempt_time
        else:
            solution_time = format_time(main_taskClock.getTime())

        all_anagrams.addData(u'Solution time', solution_time)
        all_anagrams.addData(u'Attempts', attempts)


        # сохранение информации о звуках
        all_anagrams.addData(u'Sound path', thisSound)
        if thisSound is not None:
            all_anagrams.addData(u'Sound type', sound_type)
            all_anagrams.addData(u'sound_сue', sound_before_hint)
        else:
            all_anagrams.addData(u'Sound type', u'NA')
            all_anagrams.addData(u'sound_сue', u'NA')

        all_anagrams.addData(u'Sound start in frames', sound_start)

        # сохранение информации о подсказках
        if hint_showed:
            all_anagrams.addData(u'Hint', hint_showed)
        else:
            all_anagrams.addData(u'Hint', u'NA')

        all_anagrams.addData(u'Hint appearance in frames', HINT_START)
        all_anagrams.addData(u'Hint duration in frames', HINT_DURATION)

        # сохранение информации о реальном времени, которое уходит на решение
        # анаграмм, с учётом времени на пересоздание анаграммы
        real_time = format_time(real_time_clock_for_solving_all_anagrams.getTime())
        all_anagrams.addData(u'Real time spend solving', real_time)
    SoundComponent emotional_sound
      sound [set every repeat] = $thisSound
      startVal [condition] = thisSound is not None and frameN == sound_start and not is_there_input
      volume = 0.7
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  Routine training
    KeyboardComponent training_user_input_resp
      allowedKeys = 'q', 'w', 'e', 'r', 't', 'y', 'u', 'i', 'o', 'p', 'a', 's', 'd', 'f', 'g', 'h', 'j', 'k', 'l', 'z', 'x', 'c', 'v', 'b', 'n', 'm', 'bracketleft', 'bracketright', 'semicolon', 'apostrophe', 'comma', 'period', 'х', 'ъ', 'ж', 'э', 'б', 'ю', 'space', 'backspace', 'return'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent training_input_code
      Code Type = Auto->JS
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      Begin Experiment:
        training_input_processor = InputProcessor()
      Begin Routine:
        theseKeys = []
        attempts = 0
        training_input_processor.get_answer(answer)
      Each Frame:
        user_input_text = training_input_processor.get_input()

        if t >= 30:
            training_loop.addData(u'Success', u'No')
            continueRoutine = False


        if theseKeys:
            button = theseKeys[0].name
            is_there_input = training_visual_field.opacity == 1
            if button == u'space':
                training_visual_field.opacity = 1
            elif button == u'return':
                if is_there_input:
                    attempts += 1
                    if answer == user_input_text:
                        training_loop.addData(u'Success', u'Yes')
                        continueRoutine = False
                    else:
                        training_visual_field.opacity = 0
                        training_input_processor.clear_input()
            elif is_there_input:
                training_input_processor.process_input(key=button)
      End Routine:
        training_loop.addData(u'Solution time', u'{:0>2.2f}'.format(t))
        training_loop.addData(u'Attempts', attempts)

        training_input_processor.end_trial()
    PolygonComponent training_visual_field
      fillColor = $[0.506,0.506,0.506]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 5
      opacity [set every repeat] = 0
      pos = (0, -0.5)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent anagram_training_text
      letterHeight = 0.1
      pos = (0, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anagram
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    TextComponent training_user_input_feedback
      color = black
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $user_input_text
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  Routine attention
    TextComponent attention_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Сейчас начнется экспериментальная часть.
        Нажмите ПРОБЕЛ.
    KeyboardComponent attention_exit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent measure_real_time_clock
      Code Type = Auto->JS
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      End Routine:
        real_time_clock_for_solving_all_anagrams = core.Clock()
  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        # перевод времени в минуты и секунды
        def reformat_seconds(time):
            minutes = str(int(time / 60))
            seconds = format_time(time % 60)
            phrase = u'Эксперимент шел\n' + minutes + ' минут ' + seconds + ' секунд\n\n\nСпасибо за участие!'
            return phrase
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every frame] = $reformat_seconds(globalClock.getTime())
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  Routine instruction
    CodeComponent constants
      Code Type = Auto->JS
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      Begin Experiment:
        qty_anagrams = 88

        WITHOUT_SOUND = int(qty_anagrams / 4)
        WITH_SOUND = qty_anagrams - WITHOUT_SOUND
        WITHOUT_HINT = WITH_HINT = int(qty_anagrams / 2)


        if WITHOUT_SOUND != qty_anagrams / 4:
            raise ValueError('Not equal groups to create without sound trials')

        if WITHOUT_HINT != qty_anagrams / 2:
            raise ValueError('Not equal groups to hint trials')
    CodeComponent prepare_stimuli
      Code Type = Auto->JS
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      Begin Experiment:
        sounds_path = os.listdir("sounds") * 2

        for idx in range(len(sounds_path)):
            path = sounds_path[idx]
            sounds_path[idx] = os.path.join(u'sounds', path)


        sounds_path += [None] * WITHOUT_SOUND
        show_hint = [1] * WITH_HINT + [0] * WITHOUT_HINT

        shuffle(sounds_path)
        shuffle(show_hint)

        if len(show_hint) != qty_anagrams or len(sounds_path) != qty_anagrams:
            raise ValueError('QTY hints or sounds does not equal qty of anagrams')

        show_hint = iter(show_hint)
    CodeComponent work_with_input
      Code Type = Auto->JS
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      Begin Experiment:
        class InputProcessor:
            def __init__(self):
                self.input = []
                self.max_length = None

            def get_answer(self, answer):
                self.max_length = len(answer)

            def is_limit(self):
                return len(self.input) >= self.max_length

            def process_input(self, key):
                if key == u'backspace':
                    if self.input:
                        self.input = self.input[:-1]
                elif not self.is_limit():
                    self.input.append(RUSSIAN_MAPPER[key])

            def get_input(self):
                return u''.join(self.input)

            def clear_input(self):
                self.input.clear()

            def end_trial(self):
                self.input.clear()
                self.max_length = None
    TextComponent instruction_text
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Сейчас Вам будет представлена серия анаграмм.
        Ваша задача как можно быстрее решить их.
        Как только Вы догадаетесь нажмите на ПРОБЕЛ.
        Введите слово. Решениями могут являться только имена существительные.
        Нажмите ENTER для перехода к следующей анаграмме.

        На решение одной анаграммы дается 30 сек.


        Сейчас начнется тренировочная серия.
        Для начала нажмите на ПРОБЕЛ.
    KeyboardComponent intruction_exit
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine main_task_feedback
    PolygonComponent positive_feedback_figure
      fillColor = $[0, 1, 0]
      lineColor = $[0, 1, 0]
      nVertices = 90
      opacity [set every repeat] = 0
      saveStartStop = False
      shape = regular polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent negative_feedback_figure
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      opacity [set every repeat] = 0
      ori = 45
      saveStartStop = False
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent main_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if success == u'No':
            negative_feedback_figure.opacity = 1
        else:
            positive_feedback_figure.opacity = 1
      Each Frame:
        break
    KeyboardComponent main_feedback_exit
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent main_feedback_text
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Для перехода к следующей анаграмме нажмите ПРОБЕЛ
      wrapWidth = 3
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Flow
  Routine instruction
  LoopInitiator training_loop loopType="TrialHandler"
    conditionsFile = conditions\training.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('answer', 'жизнь'), ('anagram', 'иьзнж')]),
      OrderedDict([('answer', 'пункт'), ('anagram', 'пнукт')])]
    Routine training
  LoopTerminator training_loop
  Routine attention
  LoopInitiator all_anagrams loopType="TrialHandler"
    conditionsFile = conditions\anagrams.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('number', 1), ('answer', 'оплата'), ('anagram', 'алатпо')]),
      OrderedDict([('number', 2), ('answer', 'доклад'), ('anagram', 'лдкдоа')]),
      OrderedDict([('number', 3), ('answer', 'платье'), ('anagram', 'етальп')]),
      OrderedDict([('number', 4), ('answer', 'ракета'), ('anagram', 'аеакрт')]),
      OrderedDict([('number', 5), ('answer', 'корпус'), ('anagram', 'спроук')]),
      OrderedDict([('number', 6), ('answer', 'талант'), ('anagram', 'аатнтл')]),
      OrderedDict([('number', 7), ('answer', 'дворец'), ('anagram', 'вдцоер')]),
      OrderedDict([('number', 8), ('answer', 'кредит'), ('anagram', 'дертки')]),
      OrderedDict([('number', 9), ('answer', 'премия'), ('anagram', 'репмяи')]),
      OrderedDict([('number', 10), ('answer', 'версия'), ('anagram', 'среяви')]),
      OrderedDict([('number', 11), ('answer', 'строка'), ('anagram', 'раостк')]),
      OrderedDict([('number', 12), ('answer', 'камера'), ('anagram', 'амакер')]),
      OrderedDict([('number', 13), ('answer', 'приказ'), ('anagram', 'изрпак')]),
      OrderedDict([('number', 14), ('answer', 'костюм'), ('anagram', 'юомскт')]),
      OrderedDict([('number', 15), ('answer', 'кодекс'), ('anagram', 'окедск')]),
      OrderedDict([('number', 16), ('answer', 'апрель'), ('anagram', 'рлеьпа')]),
      OrderedDict([('number', 17), ('answer', 'клиент'), ('anagram', 'еинктл')]),
      OrderedDict([('number', 18), ('answer', 'август'), ('anagram', 'угсатв')]),
      OrderedDict([('number', 19), ('answer', 'ладонь'), ('anagram', 'онаьлд')]),
      OrderedDict([('number', 20), ('answer', 'одежда'), ('anagram', 'доадеж')])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
    Routine main_task
    Routine main_task_feedback
  LoopTerminator all_anagrams
  Routine feedback
